PsychoPy2experiment version="3.0.0b12"
Settings
  Data filename = u'data/sub-%s_emoreg_practice' % (expInfo['participant'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = black
  expName = emoreg_practice
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Routines
  Routine cue
    CodeComponent cue_instruction_code
      Code Type = Py
      Begin Routine:
        cueOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('cueOnset', np.round(cueOnset, 2))

        if instruction == "LOOK":
            win.setColor('green')  # or 'blue' or whatever
            instructionIsLook = 1
            instructionIsDecrease = 0
        elif instruction == "DECREASE":
            win.setColor('blue')
            instructionIsLook = 0
            instructionIsDecrease = 1

        thisExp.addData('instruction', instruction)
        thisExp.addData('instructionIsLook', instructionIsLook)
        thisExp.addData('instructionIsDecrease', instructionIsDecrease)
      End Routine:
        cueOffset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('cueOffset', np.round(cueOffset, 2))
    TextComponent cue_instruction
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $instruction
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  Routine image
    CodeComponent image_code
      Code Type = Py
      Begin Routine:
        imageOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('imageOnset', np.round(imageOnset, 2))
      End Routine:
        imageOffset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('imageOffset', np.round(imageOffset, 2))
    ImageComponent show_image
      image [set every repeat] = $image
      size = (1.75,1.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine rate
    CodeComponent rate_code
      Code Type = Py
      Begin Routine:
        rateOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('rateOnset', np.round(rateOnset, 2))

        win.setColor('black')
      End Routine:
        rateOffset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('rateOffset', np.round(rateOffset, 2))
    ImageComponent rating_image
      image = images/emoreg_rating_scale.png
      size = (2, 2.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent emo_rating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
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  Routine rest
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $restDurationWithPad
    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        restOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('restOnset', np.round(restOnset, 2))


        # need to fix drift across trials
        restOffsetShouldBe = np.round(cueOnset, 0) + 2 + 7 + 4 + rest_duration
        restDurationWithPad = restOffsetShouldBe - restOnset

        thisExp.addData('restDurationWithPad', restDurationWithPad)
        thisExp.addData('restOffsetShouldBe', restOffsetShouldBe)
      End Routine:
        restOffset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('restOffset', np.round(restOffset, 2))
  Routine wait_for_scanner
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for scanner ...
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    CodeComponent trigger_code
      Code Type = Py
  Routine look_instructions
    CodeComponent look_setColor
      Code Type = Py
      Begin Experiment:
        import numpy as np
      Begin Routine:
        win.setColor('green')
    TextComponent look_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = LOOK = pay attention to the picture and allow yourself to respond naturally to it
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    KeyboardComponent look_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine decrease_instructions
    CodeComponent decrease_setColor
      Code Type = Py
      Begin Routine:
        win.setColor('blue')
    TextComponent decrease_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = DECREASE = think of something to tell yourself about the picture that makes you feel less negative
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    KeyboardComponent decrease_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rate_instructions
    CodeComponent rate_setColor
      Code Type = Py
      Begin Routine:
        win.setColor('black')
    KeyboardComponent rate_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent rate_instructions_img
      image = images/emoreg_rating_scale.png
      size = (2,2.5)
      startVal [time (s)] = 0.0
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  Routine ready
    TextComponent ready_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now we will practice a few timed trials.

        Press your thumb when you are ready to begin.
    KeyboardComponent ready_end
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent ready_code
      Code Type = Py
      End Routine:
        # set interal clock time for when scanner is triggered
        scannerTriggerOnset = globalClock.getTime()
        thisExp.addData('scannerTriggerOnset', scannerTriggerOnset)
  Routine end
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        endOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('endOnset', endOnset)
    TextComponent end_text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = THANK YOU!
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this task you are going to see a series of pictures.

        Some pictures might make you feel quite negative, while others won't make you feel much at all.

        Before each picture, you will see an instruction that tells you what we want you to do while you are viewing the picture.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine look1
  Routine cue_untimed
    CodeComponent cue_untimed_code
      Code Type = Py
      Begin Routine:
        if instruction == "LOOK":
            win.setColor('green')  # or 'blue' or whatever
            instructionIsLook = 1
            instructionIsDecrease = 0
        elif instruction == "DECREASE":
            win.setColor('blue')
            instructionIsLook = 0
            instructionIsDecrease = 1
    KeyboardComponent cue_untimed_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent cue_untimed_instruction
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
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  Routine image_untimed
    ImageComponent show_image_untimed
      image [set every repeat] = $image
      size = (1.75, 1.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent image_untimed_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rate_untimed
    ImageComponent rate_image_untimed
      image = images/emoreg_rating_scale.png
      size = (2, 2.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rate_image_resp
      allowedKeys = 'space', '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent rate_untimed_code
      Code Type = Py
      Begin Routine:
        win.setColor('black')
  Routine rest_untimed
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
Flow
  Routine instructions
  Routine look_instructions
  Routine decrease_instructions
  Routine rate_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = emoreg_practice_list.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialnum', 1), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', 'images/105.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 2), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/112.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 3), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/9430.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 4), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', 'images/7497.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 5), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/9620.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 6), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', 'images/9075.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 7), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/3140.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 8), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/6571.bmp'), ('rest_duration', 1)])]
    Routine cue_untimed
    Routine image_untimed
    Routine rate_untimed
    Routine rest_untimed
  LoopTerminator trials_2
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 3:9
    conditionsFile = emoreg_practice_list.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialnum', 1), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', 'images/7497.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 2), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/9620.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 3), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', 'images/9075.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 4), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/3140.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 5), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', 'images/6571.bmp'), ('rest_duration', 1)])]
    Routine cue
    Routine image
    Routine rate
    Routine rest
  LoopTerminator trials
  Routine end
