PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = black
  expName = emoreg_test
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Routines
  Routine cue
    TextComponent cue_instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $instruction
  Routine image
    ImageComponent show_image
      image [set every repeat] = $image
      size = (1.75,1.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine rate
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Rate Your Mood

        Not at all                       Very
        Negative                       Negative
             1       2       3       4       5
    KeyboardComponent emo_rating
      allowedKeys = 1,2,3,4,5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
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  Routine rest
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
  Routine wait_for_scanner
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the

        Emotion Regulation Task

        waiting for scanner ...
Flow
  Routine wait_for_scanner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../emoreg/emoreg_procedure_list.csv
    loopType = sequential
    nReps = 45
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    conditions:
      [OrderedDict([('trialnum', 1), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '3350.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 2), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', '9250.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 3), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '3120.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 4), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', '7550.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 5), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', '9420.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 6), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', '3230.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 7), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', '2595.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 8), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '9414.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 9), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '3051.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 10), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', '2102.bmp'), ('rest_duration', 1)])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
    Routine cue
    Routine image
    Routine rate
    Routine rest
  LoopTerminator trials
