PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = black
  expName = msit_test
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        import numpy as np

        # set beginning ITI for prior to yoking (unclear what this value is)
        allowed_rt = 5

        # set running accuracy and rtvariables
        incon_mean_rt = 0
        incon_mean_accuracy = 0
        con_mean_rt = 0
        con_mean_accuracy = 0

        # set 'consecutive correct/incorrect' variables for ITI yoking
        numConsecutiveCorrect = 0
        numConsecutiveIncorrect = 0

        # set block length (default is 60)
        blockLength = 20
      Begin Routine:
        nums = '%d %d %d'%(num1, num2, num3)

        # calculate correct response given num1 num2 num3
        for i in nums:
          if nums.count(i) == 1:
            corrAns = i
            break

        # for incongruent blocks, titrate allowed reaction time (ITI) to maintain 60% accuracy
        if Condition == 'Incongruent':
            if numConsecutiveCorrect >= 3:
                allowed_rt = allowed_rt - .3
            if numConsecutiveIncorrect >= 3:
                allowed_rt = allowed_rt + .3

        # for congruent blocks, set ITI to the mean ITI of the prior incongruent block
        if Condition == 'Congruent' and trial_list.thisN == 0:
            allowed_rt = incon_mean_rt


        # do not allow the ITI to get too long or too short
        if allowed_rt < .4:
            allowed_rt = .4
        elif allowed_rt > 5:
            allowed_rt = 5

        # record onset times for each block and trial (measured within block)
        # first, record clock as block onset for when it is the first trial
        if trial_list.thisN == 0:
            blockOnset = globalClock.getTime() - scannerTriggerOnset
        # second, record clock as trial onset
        trialOnset = globalClock.getTime() - blockOnset

        thisExp.addData('blockOnset', blockOnset)
        thisExp.addData('trialOnset', trialOnset)
      End Routine:
        # calculate mean running accuracy and reaction time
        if trial_list.thisN == 0:
            rt_list = []
            corr_list = []
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = 0

        if resp.keys:
            rt_list.append(resp.rt)
        corr_list.append(resp.corr)

        if Condition == 'Incongruent':
            incon_mean_rt = np.mean(rt_list)
            incon_mean_accuracy = np.mean(corr_list)
            con_mean_rt = []
            con_mean_accuracy = []
        elif Condition == 'Congruent':
            con_mean_rt = np.mean(rt_list)
            con_mean_accuracy = np.mean(corr_list)
            incon_mean_rt = []
            incon_mean_accuracy = []

        # calculate # of consecutive correct / incorrect responses (for yoking)
        if resp.corr:
            numConsecutiveCorrect = numConsecutiveCorrect + 1
            numConsecutiveIncorrect = 0
        else:
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = numConsecutiveIncorrect + 1

        # export variables
        thisExp.addData('allowed_rt', allowed_rt)
        thisExp.addData('incon_mean_rt', incon_mean_rt)
        thisExp.addData('incon_mean_accuracy', incon_mean_accuracy)
        thisExp.addData('con_mean_rt', con_mean_rt)
        thisExp.addData('con_mean_accuracy', con_mean_accuracy)
        thisExp.addData('numConsecutiveCorrect', numConsecutiveCorrect)
        thisExp.addData('numConsecutiveIncorrect', numConsecutiveIncorrect)
    TextComponent number_stims
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowed_rt
      text [set every repeat] = $nums
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    KeyboardComponent resp
      allowedKeys [set every repeat] = '1', '2', '3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowed_rt
      store = first key
      storeCorrect = True
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  Routine wait_for_scanner
    CodeComponent trigger_code
      Code Type = Py
      End Routine:
        # set interal clock time for when scanner is triggered
        scannerTriggerOnset = globalClock.getTime()
        thisExp.addData('scannerTriggerOnset', scannerTriggerOnset)
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for scanner ...
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Experiment:
        msg = ''
        msg_color = 'white'
        msg_size = .5
      Begin Routine:
        xPos = [-.25, 0, .25]
        yPos = 0

        if not resp.keys :
            nums = '' # remove the number stimuli
            msg="TOO LATE!"
            msg_color = 'white'
            xPos = 0
            msg_size = .3
        elif resp.corr:#stored on last run routine
            msg="O"
            msg_color = 'green'
            xPos = xPos[int(resp.keys)-1]
            msg_size = .5
        else:
            msg="X"
            msg_color = 'red'
            xPos = xPos[int(resp.keys)-1]
            msg_size = .5
      End Routine:
        # block lengths should be about 60 seconds
        # if there is not enough time for a new trial, then terminate routine
        if globalClock.getTime() - blockOnset + allowed_rt + 1 > blockLength:
            trial_list.finished = True
            continueRoutine = False
    TextComponent number_stims_cont
      durationEstim = 1
      letterHeight = 0.5
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0
      stopVal [time (s)] = 1
      text [set every repeat] = $nums
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    TextComponent feedback_text
      color [set every repeat] = $msg_color
      letterHeight [set every repeat] = $msg_size
      pos [set every repeat] = $(xPos, yPos)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text [set every repeat] = $msg
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  Routine rest_end
    CodeComponent rest_crosshair_code
      Code Type = Py
      Begin Experiment:
        # set desired duration for rest
        # note this will be padded with a few varying seconds
        restDuration = 10
      Begin Routine:
        # need to 'pad' the resting baseline duration since MSIT blocks end a few seconds early
        restOnset = globalClock.getTime() - scannerTriggerOnset
        restDurationPad = ((round(restOnset/10))*10) - restOnset
        thisRestDuration = restDurationPad
        #thisRestDuration = restDuration + restDurationPad

        thisExp.addData('thisRestDuration', thisRestDuration+10)
    TextComponent rest_end_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $thisRestDuration
      text = +
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  Routine rest_begin
    CodeComponent rest_begin_code
      Code Type = Py
      Begin Experiment:
        # set desired duration for rest
        # note this will be padded with a few varying seconds
        restDuration = 10
    TextComponent rest_begin_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $restDuration
      text = +
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
            instructions:

        press "space" to start
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine wait_for_scanner
  LoopInitiator msit_block_condition_order loopType="TrialHandler"
    conditionsFile = stimuli/msit_block_order.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialLists', 'stimuli/Block1Lists.csv')]),
      OrderedDict([('TrialLists', 'stimuli/Block2Lists.csv')]),
      OrderedDict([('TrialLists', 'stimuli/Block3Lists.csv')]),
      OrderedDict([('TrialLists', 'stimuli/Block4Lists.csv')])]
    LoopInitiator choose_trial_list loopType="TrialHandler"
      conditionsFile = $TrialLists
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine rest_begin
      LoopInitiator trial_list loopType="TrialHandler"
        conditionsFile = $selectedTrialList
        loopType = sequential
        nReps = 1
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        Routine trial
        Routine feedback
      LoopTerminator trial_list
      Routine rest_end
    LoopTerminator choose_trial_list
  LoopTerminator msit_block_condition_order
