PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = black
  expName = msit_4nums
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        import numpy as np

        # for 1st trial of task (during 1st incongruent block), allowed response time is 5 seconds
        allowed_rt = 5

        # set 'consecutive correct/incorrect' variables for ITI yoking
        numConsecutiveCorrect = 0
        numConsecutiveIncorrect = 0

        # set block length (default is 60)
        blockLength = 60
      Begin Routine:
        nums = '%d %d %d %d'%(num1, num2, num3, num4)

        # calculate correct response given num1 num2 num3
        for i in nums:
          if nums.count(i) == 1:
            corrAns = i
            break

        ### RT and ITI ###
        # for 1st trial of task (during 1st incongruent block), allowed response time is 5 seconds
        # for 2nd trial, record the prior RT and add 300ms to it for subsequent trials
        # for trial 2-n, use titration methods below
        if Condition == 'Incongruent' and msit_block_condition_order.thisN ==0 and trial_list.thisN == 1:
            allowed_rt = resp.rt + .3

        # for INCONGRUENT blocks, titrate allowed reaction time (ITI)
        # if participant is correct 3 trials in a row, shorten allowed time by 300ms
        # if participant is incorrect 3 trials in a row, lengthen allowed time by 300ms
        if Condition == 'Incongruent':
            if numConsecutiveCorrect >= 3:
                allowed_rt = allowed_rt - .3
            if numConsecutiveIncorrect >= 3:
                allowed_rt = allowed_rt + .3

        # for CONGRUENT blocks, set ITI to the mean ITI of the prior incongruent block
        if Condition == 'Congruent' and trial_list.thisN == 0:
            allowed_rt = mean_rt

        # do not allow the ITI to get too long or too short
        if allowed_rt < .4:
            allowed_rt = .4
        elif allowed_rt > 5:
            allowed_rt = 5

        # record onset times for each block and trial (measured within block)
        # first, record clock as block onset for when it is the first trial
        if trial_list.thisN == 0:
            blockOnset = globalClock.getTime() - scannerTriggerOnset
        # second, record clock as trial onset
        trialOnset = globalClock.getTime() - blockOnset

        # log timing variables for manipulation checks
        thisExp.addData('blockOnset', blockOnset)
        thisExp.addData('trialOnset', trialOnset)
      End Routine:
        # calculate mean running (1) accuracy and (2) reaction time
        # first, create arrays to store these data (overwrite during every new block)
        if trial_list.thisN == 0:
            rt_list = []
            corr_list = []
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = 0

        # if participant responds during the trial, add the RT to the running list
        if resp.keys:
            rt_list.append(resp.rt)
        corr_list.append(resp.corr)

        #if Condition == 'Incongruent':
        #    incon_mean_rt = np.mean(rt_list)
        #    incon_mean_accuracy = np.mean(corr_list)
        #    con_mean_rt = []
        #    con_mean_accuracy = []
        #elif Condition == 'Congruent':
        #    con_mean_rt = np.mean(rt_list)
        #    con_mean_accuracy = np.mean(corr_list)
        #    incon_mean_rt = []
        #    incon_mean_accuracy = []

        mean_rt = np.mean(rt_list)
        mean_accuracy = np.mean(corr_list)

        # calculate # of consecutive correct / incorrect responses (for yoking)
        if resp.corr:
            numConsecutiveCorrect = numConsecutiveCorrect + 1
            numConsecutiveIncorrect = 0
        else:
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = numConsecutiveIncorrect + 1

        # export variables
        thisExp.addData('allowed_rt', allowed_rt)
        thisExp.addData('mean_rt', mean_rt)
        thisExp.addData('mean_accuracy', mean_accuracy)
        thisExp.addData('numConsecutiveCorrect', numConsecutiveCorrect)
        thisExp.addData('numConsecutiveIncorrect', numConsecutiveIncorrect)
    TextComponent number_stims
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowed_rt
      text [set every repeat] = $nums
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    KeyboardComponent resp
      allowedKeys [set every repeat] = '1', '2', '3', '4'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowed_rt
      store = first key
      storeCorrect = True
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  Routine wait_for_scanner
    CodeComponent trigger_code
      Code Type = Py
      End Routine:
        # set interal clock time for when scanner is triggered
        scannerTriggerOnset = globalClock.getTime()
        thisExp.addData('scannerTriggerOnset', scannerTriggerOnset)
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for scanner ...
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Experiment:
        msg = ''
        msg_color = 'white'
        msg_size = .5
      Begin Routine:
        xPos = [-.37, -.12, .12, .37]
        yPos = 0

        # set length of feedback window
        # for incongruent blocks, make it 1 sec
        # for congruent blocks, to control for motor response differences, pad the feedback so there are as many congruent trials as incongruent trials
        if Condition == 'Incongruent':
            feedback_length = 1
        elif Condition == 'Congruent':
            conTrialLength = (blockLength - restDurationPad) / numCompletedTrials
            if resp.keys:
                feedback_length = conTrialLength - resp.rt
            else:
                feedback_length = conTrialLength - allowed_rt
        thisExp.addData('feedback_length', feedback_length)

        # give feedback
        if not resp.keys :
            nums = '' # remove the number stimuli
            msg = "TOO LATE!"
            msg_color = 'white'
            xPos = 0
            msg_size = .3
        elif resp.corr: #stored on last run routine
            msg = "O"
            msg_color = 'green'
            xPos = xPos[int(resp.keys)-1]
            msg_size = .5
        else:
            msg = "X"
            msg_color = 'red'
            xPos = xPos[int(resp.keys)-1]
            msg_size = .5
      End Routine:
        # block lengths should be about 60 seconds
        # if there is not enough time for a new trial, then terminate routine
        if globalClock.getTime() - blockOnset + allowed_rt + feedback_length > blockLength:
            trial_list.finished = True
            continueRoutine = False
    TextComponent number_stims_cont
      letterHeight = 0.5
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedback_length
      text [set every repeat] = $nums
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    TextComponent feedback_text
      color [set every repeat] = $msg_color
      letterHeight [set every repeat] = $msg_size
      pos [set every repeat] = $(xPos, yPos)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedback_length
      text [set every repeat] = $msg
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  Routine rest_end
    CodeComponent rest_crosshair_code
      Code Type = Py
      Begin Experiment:
        # set desired duration for rest
        # note this will be padded with a few varying seconds
        restDuration = 10
      Begin Routine:
        # record number of trials completed in the block - need this for yoking congruent blocks
        numCompletedTrials = trial_list.thisN
        thisExp.addData('numCompletedTrials', numCompletedTrials)


        # need to 'pad' the resting baseline duration since MSIT blocks end a few seconds early
        restOnset = globalClock.getTime() - scannerTriggerOnset
        restDurationPad = ((round(restOnset/10))*10) - restOnset
        thisRestDuration = restDurationPad
        #thisRestDuration = restDuration + restDurationPad

        thisExp.addData('thisRestDuration', thisRestDuration + restDuration)
    TextComponent rest_end_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $thisRestDuration
      text = +
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  Routine rest_begin
    CodeComponent rest_begin_code
      Code Type = Py
      Begin Experiment:
        # set desired duration for rest
        # note this will be padded with a few varying seconds
        restDuration = 10
    TextComponent rest_begin_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $restDuration
      text = +
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
            instructions:

        press "space" to start
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  Routine wait_for_scanner
  LoopInitiator msit_block_condition_order loopType="TrialHandler"
    conditionsFile = stimuli/msit_block_order_4nums.csv
    isTrials = False
    loopType = sequential
    nReps = 4
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    conditions:
      [OrderedDict([('TrialList', 'stimuli/InconList_4nums.csv')]),
      OrderedDict([('TrialList', 'stimuli/ConList_4nums.csv')])]
    Routine rest_begin
    LoopInitiator trial_list loopType="TrialHandler"
      conditionsFile = $TrialList
      loopType = random
      nReps = 4
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      Routine trial
      Routine feedback
    LoopTerminator trial_list
    Routine rest_end
  LoopTerminator msit_block_condition_order
