PsychoPy2experiment version="3.0.0b12"
Settings
  Data filename = u'data/sub-%s_%s_%s' % (expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = white
  expName = sam
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Routines
  Routine instructions
    TextComponent instructions_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Next, we will ask you to rate how you felt during the last period

        Press the INDEX FINGER button to move the arrow LEFT

        Press the MIDDLE FINGER button to move the arrow RIGHT

        Press the THUMB FINGER button to ENTER your rating
    KeyboardComponent end_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_trials
    TextComponent question_text
      color = black
      letterHeight = 0.1
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_1
      color = black
      letterHeight = 0.1
      pos = (-.75, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      pos = (.75, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text2
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    ImageComponent image1
      image [set every repeat] = $img1
      pos = (-.8, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $img2
      pos = (-.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $img3
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $img4
      pos = (.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $img5
      pos = (.8, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating
      customize_everything = low=1, high=9, markerStart=5, leftKeys=['2', 'left'], rightKeys=['3', 'right'], acceptKeys=['1','return'], stretch=3, scale=None
      forceEndRoutine = True
      pos = 0, -0.4
      size = 1
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        If you made a mistake and would like to change any of your ratings, please tell the experimenter now.

        Otherwise, please tell the experimenter that you are ready for the next period.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sam_task_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'calm'), ('question', 'In the last rest period, to what extent did you feel calm?'), ('text1', 'very calm'), ('text2', 'very excited'), ('img1', 'images/Arousal_5.bmp'), ('img2', 'images/Arousal_4.bmp'), ('img3', 'images/Arousal_3.bmp'), ('img4', 'images/Arousal_2.bmp'), ('img5', 'images/Arousal_1.bmp')]),
      OrderedDict([('condition', 'challenging'), ('question', 'In the last task period, to what extent did you feel "in-control" when the task was MOST challenging?'), ('text1', 'very little control'), ('text2', 'very in-control'), ('img1', 'images/Dominance_1.bmp'), ('img2', 'images/Dominance_2.bmp'), ('img3', 'images/Dominance_3.bmp'), ('img4', 'images/Dominance_4.bmp'), ('img5', 'images/Dominance_5.bmp')]),
      OrderedDict([('condition', 'valence'), ('question', 'In the last task period, to what extent did you feel happy or unhappy when the task was MOST challenging?'), ('text1', 'very unhappy'), ('text2', 'very happy'), ('img1', 'images/Valence_1.bmp'), ('img2', 'images/Valence_2.bmp'), ('img3', 'images/Valence_3.bmp'), ('img4', 'images/Valence_4.bmp'), ('img5', 'images/Valence_5.bmp')])]
    Routine rating_trials
  LoopTerminator trials
  Routine end
