PsychoPy2experiment version="3.0.0b12"
Settings
  Data filename = u'data/sub-%s_task-%s_beh' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        # for 1st trial of task (during 1st incongruent block), allowed response time is 5 seconds
        allowedRT = 5

        # set 'consecutive correct/incorrect' variables for ITI yoking
        numConsecutiveCorrect = 0
        numConsecutiveIncorrect = 0
      Begin Routine:
        ### RT and ITI ###
        # for 1st trial of task (during 1st incongruent block), allowed response time is 5 seconds
        # for 2nd trial, record the prior RT and add 300ms to it for subsequent trials
        # for trial 2-n, use titration methods below
        if Condition == 'Incongruent' and stroop_block_condition_order.thisN == 0 and trial_list.thisN == 1:
            if resp.keys:
                allowedRT = resp.rt + .3
            else: # if for some reason there is not a respone on trial 1
                allowedRT = 5000

        # for CONGRUENT blocks, set ITI to the mean ITI of the prior incongruent block
        if Condition == 'Congruent' and trial_list.thisN == 0:
            if np.isfinite(meanRT):
                allowedRT = meanRT
            else:
                allowedRT = 5000

        # for INCONGRUENT blocks, titrate allowed reaction time (ITI)
        # if participant is correct 3 trials in a row, shorten allowed time by 300ms
        # if participant is incorrect 3 trials in a row, lengthen allowed time by 300ms
        if Condition == 'Incongruent':
            if numConsecutiveCorrect >= 3:
                allowedRT = allowedRT - .3
            if numConsecutiveIncorrect >= 3:
                allowedRT = allowedRT + .3

        # do not allow the ITI to get too long or too short
        if allowedRT < .4:
            allowedRT = .4
        elif allowedRT > 5:
            allowedRT = 5

        # record onset times for each block and trial (measured within block)
        # first, record clock as block onset for when it is the first trial
        if trial_list.thisN == 0:
            blockOnset = globalClock.getTime() - scannerTriggerOnset
        # second, record clock as trial onset
        trialOnset = globalClock.getTime() - scannerTriggerOnset - blockOnset

        # log timing variables for manipulation checks
        thisExp.addData('blockOnset', blockOnset)
        thisExp.addData('trialOnset', trialOnset)
      End Routine:
        # calculate mean running (1) accuracy and (2) reaction time
        # first, create arrays to store these data (overwrite during every new block)
        if trial_list.thisN == 0:
            rt_list = []
            corr_list = []
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = 0

        # if participant responds during the trial, add the RT to the running list
        if resp.keys:
            rt_list.append(resp.rt)
        corr_list.append(resp.corr)

        meanRT = np.mean(rt_list)
        meanAccuracy = np.mean(corr_list)

        # calculate # of consecutive correct / incorrect responses (for yoking incongruent trials)
        if resp.corr:
            numConsecutiveCorrect = numConsecutiveCorrect + 1
            numConsecutiveIncorrect = 0
        else:
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = numConsecutiveIncorrect + 1

        # export variables
        thisExp.addData('allowedRT', allowedRT)
        thisExp.addData('meanRT', meanRT)
        thisExp.addData('meanAccuracy', meanAccuracy)
        thisExp.addData('numConsecutiveCorrect', numConsecutiveCorrect)
        thisExp.addData('numConsecutiveIncorrect', numConsecutiveIncorrect)
    TextComponent target_stim
      color [set every repeat] = $targetcolor
      letterHeight = 0.2
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
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      text [set every repeat]:
        $target
    TextComponent word1
      color [set every repeat] = $w1color
      letterHeight = .2
      pos = (-.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
      text [set every repeat] = $w1
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    TextComponent word2
      color [set every repeat] = $w2color
      letterHeight = 0.2
      pos = (-.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
      text [set every repeat] = $w2
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    TextComponent word3
      color [set every repeat] = $w3color
      letterHeight = 0.2
      pos = (.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
      text [set every repeat] = $w3
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    TextComponent word4
      color [set every repeat] = $w4color
      letterHeight = 0.2
      pos = (.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
      text [set every repeat] = $w4
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    KeyboardComponent resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
      store = first key
      storeCorrect = True
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  Routine wait_for_scanner
    CodeComponent trigger_code
      Code Type = Py
      Begin Experiment:
        # current trigger: ^ (shift+6)
      End Routine:
        # set interal clock time for when scanner is triggered
        scannerTriggerOnset = globalClock.getTime()
        thisExp.addData('scannerTriggerOnset', scannerTriggerOnset)
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for scanner ...
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        # set length of feedback window
        # for incongruent blocks, make it 1 sec
        # for congruent blocks, to control for motor response differences, pad the feedback so there are as many congruent trials as incongruent trials
        if Condition == 'Incongruent':
            feedbackLength = 1
        elif Condition == 'Congruent':
            conTrialLength = (blockLength - restDurationPad) / numCompletedTrials
            conTrialLength = np.floor(conTrialLength*10)/10 # round down to 1 decimal point
            thisExp.addData('conTrialLength', conTrialLength)
            if resp.keys:
                feedbackLength = conTrialLength - resp.rt
            else:
                feedbackLength = conTrialLength - allowedRT
        thisExp.addData('feedbackLength', feedbackLength)

        #############################################################################

        # create array of x coordinates for displaying feedback components
        xPos = [-.6, -.2, .2, .6]

        # two values of the xPos we want to use
        # 1) position of the correct answer
        xPosCorrAns = xPos[int(corrAns)-1]
        # 2) position of the participant's response (see below)

        # show feedback
        if resp.keys:
            showCircle = 1 # show the circle component
            xPosResp = xPos[int(resp.keys)-1] # x position for displaying circle/✓/X
            msg_size = .5
            if resp.corr: # CORRECT RESPONSE
                msg = "✓"
                msg_color = 'white'
                msg_size = .3
                yPosResp = -.3 # display ✓ just below the words
                msg2 = '' # do not show the correct response on a delay
            elif resp.corr == 0:
                msg = "X"
                msg_color = 'red'
                msg_size = .5 # make the X a little bigger
                yPosResp = -.15 # display X directly over the words
                msg2 = "✓" # show the correct response on a delay
        else:# NO RESPONSE (note, resp.keys will be blank)
            showCircle = 0 # set circle component to transparent (Tim - any better way to do this?)
            target = '' # remove all stimuli
            w1 = '' # remove all stimuli
            w2 = '' # remove all stimuli
            w3 = '' # remove all stimuli
            w4 = '' # remove all stimuli
            msg = "TOO LATE!"
            msg_color = 'white'
            xPosResp = 0 # center feedback
            yPosResp = 0 # center feedback
            msg_size = .3 # make "TOO LATE" a little smaller than X
            msg2 = '' # do not show the correct response on a delay
      End Routine:
        # block lengths should not go over allotted time (usually 60 sec)
        # if there is not enough time for a new trial, then terminate routine
        if globalClock.getTime() - scannerTriggerOnset - blockOnset + allowedRT + feedbackLength > blockLength:
            trial_list.finished = True
            continueRoutine = False
    TextComponent target_stim_cont
      color [set every repeat] = $targetcolor
      letterHeight = 0.2
      pos [set every repeat] = (0,.3)
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $target
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    TextComponent word1_cont
      color [set every repeat] = $w1color
      letterHeight = 0.2
      pos = (-.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w1
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    TextComponent word2_cont
      color [set every repeat] = $w2color
      letterHeight = 0.2
      pos = (-.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w2
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    TextComponent word3_cont
      color [set every repeat] = $w3color
      letterHeight = 0.2
      pos = (.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w3
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    TextComponent word4_cont
      color [set every repeat] = $w4color
      letterHeight = 0.2
      pos = (.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w4
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    TextComponent feedback1
      color [set every repeat] = $msg_color
      letterHeight [set every repeat] = $msg_size
      pos [set every repeat] = $(xPosResp, yPosResp)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $msg
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    TextComponent feedback2
      letterHeight = 0.3
      pos [set every repeat] = $(xPosCorrAns, -.3)
      startVal [time (s)] = .5
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $msg2
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    PolygonComponent respCircle
      fillColor = $[1,1,1]
      nVertices = 100000
      opacity [set every repeat] = $showCircle
      pos [set every repeat] = $(xPosResp, -.6)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedbackLength
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  Routine rest_end
    CodeComponent rest_crosshair_code
      Code Type = Py
      Begin Routine:
        # record number of trials completed in the block - need this for yoking congruent blocks
        numCompletedTrials = trial_list.thisN
        thisExp.addData('numCompletedTrials', numCompletedTrials)

        # need to 'pad' the resting baseline duration since trial blocks end a few seconds early
        restOnset = globalClock.getTime() - scannerTriggerOnset
        restDurationPad = ((np.ceil(restOnset/10))*10) - restOnset

        thisExp.addData('restOnset', restOnset)
        thisExp.addData('thisRestDuration', restDuration + restDurationPad)
    TextComponent rest_end_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $restDurationPad
      text = +
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  Routine rest_begin
    TextComponent rest_begin_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $restDuration
      text = +
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  Routine instructions
    CodeComponent experiment_default_variables
      Code Type = Py
      Begin Experiment:
        import numpy as np

        ######################################################
        # EXPERIMENTAL PARAMETERS THAT THE USER CAN MANIPULATE:
        ######################################################

        # set number of blocks in experiment (default = 4)
        # NOTE: one block = rest + incongruent + rest + congruent
        numBlocks = 4

        # set duration (sec) for incongruent/congruent blocks (default = 60, must be divisible by 10)
        blockLength = 60

        # set duration (sec) for rest periods (default = 10, must be divisible by 10)
        # note this will be padded with a few varying seconds
        restDuration = 10

        ######################################################
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
            instructions:

        press "space" to start
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        endOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('endOnset', endOnset)
    TextComponent end_text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = THANK YOU!
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Flow
  Routine instructions
  Routine wait_for_scanner
  LoopInitiator stroop_block_condition_order loopType="TrialHandler"
    conditionsFile = stimuli/stroop_block_order_4nums.csv
    isTrials = False
    loopType = sequential
    nReps = $numBlocks
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    conditions:
      [OrderedDict([('Condition', 'Incongruent'), ('TrialList', 'stimuli/InconList_colors.csv')]),
      OrderedDict([('Condition', 'Congruent'), ('TrialList', 'stimuli/ConList_colors.csv')])]
    Routine rest_begin
    LoopInitiator trial_list loopType="TrialHandler"
      conditionsFile = $TrialList
      loopType = random
      nReps = 4
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      Routine trial
      Routine feedback
    LoopTerminator trial_list
    Routine rest_end
  LoopTerminator stroop_block_condition_order
  Routine end
