PsychoPy2experiment version="3.0.0b12"
Settings
  Data filename = u'../data/sub-%s/ses-%s/sub-%s_ses-%s_task-%s_beh' % (expInfo['participant'], expInfo['visit'], expInfo['participant'], expInfo['visit'], expName)
  Experiment info = {'participant': '', 'visit': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop_new
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        # for 1st trial of task (during 1st incongruent block), allowed response time is 5 seconds
        allowedRT = 5

        # set 'consecutive correct/incorrect' variables for ITI yoking
        numConsecutiveCorrect = 0
        numConsecutiveIncorrect = 0
      Begin Routine:
        # on first trial of each block, create arrays to store running accuracy
        if trial_list.thisN == 0:
            rt_list = []
            corr_list = []
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = 0

        ### RT and ITI ### - FIXED
        # for INCONGRUENT BLOCKS, allowed response time is 5 seconds until a correct response is made
        # after the first correct response, record the prior RT and add 300ms for the following trial
        # for subsequent trials, titrate allowed reaction time according to performance:
        # if participant is correct 3 trials in a row, shorten allowed time by 300ms
        # if participant is incorrect 3 trials in a row, lengthen allowed time by 300ms
        if Condition == 'Incongruent':
            if np.sum(corr_list) == 0: # no correct responses have yet been made this block
                allowedRT = 5
            if np.sum(corr_list) == 1 and corr_list[-1] == 1: # exactly 1 correct response has been made and it was the most recent response
                allowedRT = resp.rt + .3
            if numConsecutiveCorrect >= 3:
                allowedRT = allowedRT - .3
            if numConsecutiveIncorrect >= 3:
                allowedRT = allowedRT + .3

        # for CONGRUENT BLOCKS, set ITI to the mean ITI of the prior incongruent block
        if Condition == 'Congruent' and trial_list.thisN == 0:
            if np.isfinite(meanRT):
                allowedRT = meanRT
            else:
                allowedRT = 5

        # do not allow the ITI to get too long or too short
        if allowedRT < .4:
            allowedRT = .4
        elif allowedRT > 5:
            allowedRT = 5

        # record onset times for each block and trial (measured within block)
        # first, record clock as block onset for when it is the first trial
        if trial_list.thisN == 0:
            blockOnset = globalClock.getTime() - scannerTriggerOnset
        # second, record clock as trial onset
        trialOnset = globalClock.getTime() - scannerTriggerOnset - blockOnset

        # log timing variables for manipulation checks
        thisExp.addData('blockOnset', blockOnset)
        thisExp.addData('trialOnset', trialOnset)
      End Routine:
        # calculate mean running (1) accuracy and (2) reaction time

        # if participant responds during the trial, add the RT to the running list
        if resp.keys:
            rt_list.append(resp.rt)
        corr_list.append(resp.corr)

        meanRT = np.mean(rt_list)
        meanAccuracy = np.mean(corr_list)

        # calculate # of consecutive correct / incorrect responses (for yoking incongruent trials)
        if resp.corr:
            numConsecutiveCorrect = numConsecutiveCorrect + 1
            numConsecutiveIncorrect = 0
        else:
            numConsecutiveCorrect = 0
            numConsecutiveIncorrect = numConsecutiveIncorrect + 1

        # export variables
        thisExp.addData('allowedRT', allowedRT)
        thisExp.addData('meanRT', meanRT)
        thisExp.addData('meanAccuracy', meanAccuracy)
        thisExp.addData('numConsecutiveCorrect', numConsecutiveCorrect)
        thisExp.addData('numConsecutiveIncorrect', numConsecutiveIncorrect)
    TextComponent target_stim
      color [set every repeat] = $targetcolor
      letterHeight = 0.2
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $timeOnScreen
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      text [set every repeat]:
        $target
    TextComponent word1
      color [set every repeat] = $w1color
      letterHeight = .2
      pos = (-.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $timeOnScreen
      text [set every repeat] = $w1
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    TextComponent word2
      color [set every repeat] = $w2color
      letterHeight = 0.2
      pos = (-.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $timeOnScreen
      text [set every repeat] = $w2
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    TextComponent word3
      color [set every repeat] = $w3color
      letterHeight = 0.2
      pos = (.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $timeOnScreen
      text [set every repeat] = $w3
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    TextComponent word4
      color [set every repeat] = $w4color
      letterHeight = 0.2
      pos = (.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $timeOnScreen
      text [set every repeat] = $w4
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    KeyboardComponent resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $allowedRT
      store = first key
      storeCorrect = True
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  Routine wait_for_scanner
    CodeComponent trigger_code
      Code Type = Py
      Begin Experiment:
        # current trigger: ^ (shift+6)
      End Routine:
        # set interal clock time for when scanner is triggered
        scannerTriggerOnset = globalClock.getTime()
        thisExp.addData('scannerTriggerOnset', scannerTriggerOnset)
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum', 'equal', 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for scanner ...
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        # set length of feedback window
        # for incongruent blocks, make it 1 sec
        # for congruent blocks, to control for motor response differences, pad the feedback so there are as many congruent trials as incongruent trials
        if Condition == 'Incongruent':
            feedbackLength = 1
        elif Condition == 'Congruent':
            conTrialLength = thisBlockDuration / numCompletedTrials
            conTrialLength = np.floor(conTrialLength*10)/10 # round down to 1 decimal point
            thisExp.addData('conTrialLength', conTrialLength)
            if resp.keys:
                feedbackLength = conTrialLength - resp.rt
            else:
                feedbackLength = conTrialLength - allowedRT
        thisExp.addData('feedbackLength', feedbackLength)

        #############################################################################

        # create array of x coordinates for displaying feedback components
        xPos = [-.6, -.2, .2, .6]

        # two values of the xPos we want to use
        # 1) position of the correct answer
        xPosCorrAns = xPos[int(corrAns)-1]
        # 2) position of the participant's response (see below)

        # show feedback
        if resp.keys:
            showCircle = 1 # show the circle component
            xPosResp = xPos[int(resp.keys)-1] # x position for displaying circle/✓/X
            msg_size = .5
            if resp.corr: # CORRECT RESPONSE
                msg = "✓"
                msg_color = 'white'
                msg_size = .3
                yPosResp = -.3 # display ✓ just below the words
                msg2 = '' # do not show the correct response on a delay
            elif resp.corr == 0:
                msg = "X"
                msg_color = 'red'
                msg_size = .5 # make the X a little bigger
                yPosResp = -.15 # display X directly over the words
                msg2 = "✓" # show the correct response on a delay
        else:# NO RESPONSE (note, resp.keys will be blank)
            showCircle = 0 # set circle component to transparent (Tim - any better way to do this?)
            target = '' # remove all stimuli
            w1 = '' # remove all stimuli
            w2 = '' # remove all stimuli
            w3 = '' # remove all stimuli
            w4 = '' # remove all stimuli
            msg = "TOO LATE!"
            msg_color = 'white'
            xPosResp = 0 # center feedback
            yPosResp = 0 # center feedback
            msg_size = .3 # make "TOO LATE" a little smaller than X
            msg2 = '' # do not show the correct response on a delay
      End Routine:
        # block lengths should not go over allotted time (usually 60 sec)
        # if there is not enough time for a new trial, then terminate routine
        if globalClock.getTime() - scannerTriggerOnset - blockOnset + allowedRT + feedbackLength > blockDuration:
            thisBlockDuration = globalClock.getTime() - scannerTriggerOnset - blockOnset
            thisExp.addData('thisBlockDuration', thisBlockDuration)
            # record number of trials completed in the block - need this for yoking congruent blocks
            numCompletedTrials = trial_list.thisN
            thisExp.addData('numCompletedTrials', numCompletedTrials)
            trial_list.finished = True
            continueRoutine = False
    TextComponent target_stim_cont
      color [set every repeat] = $targetcolor
      letterHeight = 0.2
      pos [set every repeat] = (0,.3)
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $target
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    TextComponent word1_cont
      color [set every repeat] = $w1color
      letterHeight = 0.2
      pos = (-.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w1
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    TextComponent word2_cont
      color [set every repeat] = $w2color
      letterHeight = 0.2
      pos = (-.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w2
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    TextComponent word3_cont
      color [set every repeat] = $w3color
      letterHeight = 0.2
      pos = (.2, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w3
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    TextComponent word4_cont
      color [set every repeat] = $w4color
      letterHeight = 0.2
      pos = (.6, -.2)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $w4
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    TextComponent feedback1
      color [set every repeat] = $msg_color
      letterHeight [set every repeat] = $msg_size
      pos [set every repeat] = $(xPosResp, yPosResp)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $msg
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    TextComponent feedback2
      letterHeight = 0.3
      pos [set every repeat] = $(xPosCorrAns, -.3)
      startVal [time (s)] = .5
      stopVal [time (s)] = $feedbackLength
      text [set every repeat] = $msg2
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    PolygonComponent respCircle
      fillColor = $[1,1,1]
      nVertices = 100000
      opacity [set every repeat] = $showCircle
      pos [set every repeat] = $(xPosResp, -.6)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedbackLength
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  Routine rest_end
    CodeComponent rest_crosshair_code
      Code Type = Py
      Begin Routine:
        # record number of trials completed in the block - need this for yoking congruent blocks
        numCompletedTrials = trial_list.thisN
        thisExp.addData('numCompletedTrials', numCompletedTrials)

        # need to 'pad' the resting baseline duration since trial blocks end a few seconds early
        restOnset = globalClock.getTime() - scannerTriggerOnset
        restDurationPad = ((np.ceil(restOnset/10))*10) - restOnset

        thisExp.addData('restOnset', restOnset)
        thisExp.addData('thisRestDuration', restDuration + restDurationPad)
    TextComponent rest_end_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $restDurationPad
      text = +
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  Routine instructions
    CodeComponent experiment_default_variables
      Code Type = Py
      Begin Experiment:
        import numpy as np

        ######################################################
        # EXPERIMENTAL PARAMETERS THAT THE USER CAN MANIPULATE:
        ######################################################

        # set number of blocks in experiment (default = 4)
        # NOTE: one block = rest + incongruent + rest + congruent
        numBlocks = 4

        # set duration (sec) for incongruent/congruent blocks (default = 60, must be divisible by 10)
        blockDuration = 60

        # set duration (sec) for rest periods (default = 10, must be divisible by 10)
        # note this will be padded with a few varying seconds
        restDuration = 10

        ######################################################

        timeOnScreen = .3
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please wait

        The task will begin soon
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        endOnset = globalClock.getTime() - scannerTriggerOnset
        thisExp.addData('endOnset', endOnset)
      End Experiment:
        import pandas as pd
        # TSV output
        ev_fname = _thisDir + os.sep + u'../data/sub-%s/ses-%s/sub-%s_ses-%s_task-%s_acq-mb3_bold.tsv' % (expInfo['participant'], expInfo['visit'], expInfo['participant'], expInfo['visit'], expName)

        tempfile = _thisDir + os.sep + u'../data/sub-%s/ses-%s/_temp' % (expInfo['participant'], expInfo['visit'])

        thisExp.saveAsWideText(tempfile + '.csv')

        beh_df = pd.read_csv(tempfile + '.csv')

        os.remove(tempfile + '.csv')

        n_blocks = beh_df["msit_block_condition_order.thisN"].nunique()
        unique_blocks = np.arange(n_blocks)

        condition, onset, duration, mean_rt, mean_accuracy, num_trials = [], [], [], [], [], []

        for i_block in unique_blocks:
            this_block_idxs = beh_df[beh_df["msit_block_condition_order.thisN"]==i_block].index
            condition.append(beh_df.loc[this_block_idxs[0], 'Condition'])
            onset.append(beh_df.loc[this_block_idxs[0], 'blockOnset'])
            duration.append(beh_df.loc[this_block_idxs[::-1][0], 'blockDuration'])
            mean_rt.append(beh_df.loc[this_block_idxs, 'resp.rt'].mean())
            mean_accuracy.append(beh_df.loc[this_block_idxs, 'resp.corr'].mean())
            num_trials.append(len(this_block_idxs))

        events_df = pd.DataFrame({'onset': onset,
                                  'duration': duration,
                                  'trial_type': condition,
                                  'mean_rt':mean_rt,
                                  'mean_accuracy': mean_accuracy,
                                  'num_trials':num_trials})

        events_df.to_csv(ev_fname, sep="\t", index=False)

        # QC text output

        incTrials = (beh_df['Condition'] == 'Incongruent')
        conTrials = (beh_df['Condition'] == 'Congruent')

        qc_dict = {'ID': expInfo['participant'],
        'Session': expInfo['visit'],
        'Date': expInfo['date'],
        'Task': expName,
        'IncNumTrials': sum(incTrials),
        'IncRT': beh_df.loc[incTrials, 'resp.rt'].mean(skipna=True),
        'IncACC': beh_df.loc[incTrials, 'resp.corr'].mean(skipna=True),
        'ConNumTrials': sum(conTrials),
        'ConRT': beh_df.loc[conTrials, 'resp.rt'].mean(skipna=True),
        'ConACC': beh_df.loc[conTrials, 'resp.corr'].mean(skipna=True)
        }

        qc_filename = _thisDir + os.sep + u'../data/sub-%s/ses-%s/sub-%s_ses-%s_task-%s_qc' % (expInfo['participant'], expInfo['visit'], expInfo['participant'], expInfo['visit'], expName)
        file = open(qc_filename + ".txt", "w")

        for key in ['ID', 'Session', 'Date', 'Task', 'IncNumTrials', 'IncRT', 'IncACC', 'ConNumTrials', 'ConRT', 'ConACC']:
            file.write(key + ": " + str(qc_dict[key]) + "\n")



        file.close()
    TextComponent end_text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = THANK YOU!
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  Routine rest
    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        restOnset = globalClock.getTime() - scannerTriggerOnset

        restEnd = (stroop_block_condition_order.thisN*(blockDuration+restDuration))+restDuration

        thisRestDuration = restEnd - restOnset

        thisExp.addData('restOnset', restOnset)
        thisExp.addData('restEnd', restEnd)
        thisExp.addData('thisRestDuration', thisRestDuration)
    TextComponent rest_begin_crosshair
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisRestDuration
      text = +
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Flow
  Routine instructions
  Routine wait_for_scanner
  LoopInitiator stroop_block_condition_order loopType="TrialHandler"
    conditionsFile = stimuli/stroop_block_order_4nums.csv
    isTrials = False
    loopType = sequential
    nReps = $numBlocks
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    conditions:
      [OrderedDict([('Condition', 'Incongruent'), ('TrialList', 'stimuli/InconList_colors.csv')]),
      OrderedDict([('Condition', 'Congruent'), ('TrialList', 'stimuli/ConList_colors.csv')])]
    Routine rest
    LoopInitiator trial_list loopType="TrialHandler"
      conditionsFile = $TrialList
      loopType = random
      nReps = 4
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      Routine trial
      Routine feedback
    LoopTerminator trial_list
  LoopTerminator stroop_block_condition_order
  Routine end
